CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "F1")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "F2")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "F3")
    Name to assign these images:OrigRED
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:OrigBlue
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

EnhanceOrSuppressFeatures:[module_num:6|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notes:['Use filtering to enhance the foci speckles in the image. The feature size setting should be specified to be at least as large as the largest feature to be enhanced.']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
    Select the input image:OrigGreen
    Name the output image:EnhancedGreen
    Select the operation:Enhance
    Feature size:60
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:OrigRED
    Name the output image:EnhancedRed
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:8|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notes:['Mask the foci image using the nuclei objects.']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
    Select the input image:EnhancedGreen
    Name the output image:MaskedGreen
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

MaskImage:[module_num:9|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
    Select the input image:EnhancedRed
    Name the output image:MaskedRed
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:10|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notes:['Identify the foci using per-object thresholding to compute a threshold for each individual nuclei object. Some manual adjustment of the smoothing filter size and maxima supression distance is required to optimize segmentation.']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
    Select the input image:MaskedGreen
    Name the primary objects to be identified:S93
    Typical diameter of objects, in pixel units (Min,Max):3,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:MaskedRed
    Name the primary objects to be identified:h2ax
    Typical diameter of objects, in pixel units (Min,Max):3,13
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:4
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
MeasureObjectIntensity:[module_num:12|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notes:['Measure the intensity of the nuclei against the nuclei image.']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
    Select images to measure:OrigBlue, OrigGreen, OrigRED
    Select objects to measure:Nuclei

MeasureObjectIntensity:[module_num:13|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notes:['Measure the intensity of the foci against the h2ax image.']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
    Select images to measure:OrigGreen
    Select objects to measure:S93

MeasureObjectIntensity:[module_num:14|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
    Select images to measure:OrigRED
    Select objects to measure:h2ax

RelateObjects:[module_num:15|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notes:['Establish a parent-child between the foci (âx80x9cchildrenâx80x9d) and the nuclei (âx80x9cparentsâx80x9d) in order to determine which foci belong to which nuclei. Then, calculate mean foci measurements for each nucleus.']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
    Parent objects:Nuclei
    Child objects:h2ax
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:16|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
    Parent objects:Nuclei
    Child objects:S93
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:17|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|G:\\AG_Doberstein\\Lumaview\\Versuche\\Bleo Experiment FUOV1 OVSAHO WNT9A 16042025
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:sc bleo OVSAHO
    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
